#Things to measure: scintillator height/radius/material

##################
#    Preamble    #
#                #
##################
/control/execute visu.mac
/control/execute verbose.mac

###################
#   Configuring   #
#                 #
###################

# Create world
/gate/geometry/setMaterialDatabase GateMaterials.db 
/gate/world/geometry/setXLength 0.2 m
/gate/world/geometry/setYLength 0.2 m
/gate/world/geometry/setZLength 0.2 m
/gate/world/setMaterial Air

# Create Scintillating Slab
/gate/world/daughters/name scintillator
/gate/world/daughters/insert cylinder
/gate/scintillator/setMaterial ScintX #Scintillating material
/gate/scintillator/geometry/setRmin 0 mm
/gate/scintillator/geometry/setRmax 20 mm # Measure this every time please!
/gate/scintillator/geometry/setHeight 4 mm # Measure this every time please!
/gate/scintillator/geometry/setPhiStart 0 deg
/gate/scintillator/geometry/setDeltaPhi 360 deg
/gate/scintillator/vis/setColor yellow

# Create strontium (or other) source
/gate/world/daughters/name radioactiveSource
/gate/world/daughters/insert cylinder
/gate/radioactiveSource/setMaterial Strontium-90
/gate/radioactiveSource/geometry/setRmin 0 mm
/gate/radioactiveSource/geometry/setRmax 1 mm
/gate/radioactiveSource/geometry/setHeight 1 mm
/gate/radioactiveSource/geometry/setPhiStart 0 deg
/gate/radioactiveSource/geometry/setDeltaPhi 360 deg
/gate/radioactiveSource/vis/setColor green
/gate/radioactiveSource/placement/setTranslation 0 0 4 cm

###############
# Information #
#             #
###############

/gate/physics/addPhysicsList emstandard #Use higher _opt(number) suffix for more precision

/gate/output/allowNoOutput           #Is this right? I'm looking for edep along the scintillator

##################
#  Moving Parts  #
#                #
##################

/gate/run/initialize

# Actors
#/gate/source/addSource radSource
/gate/application/setTotalNumberOfPrimaries 1000
/gate/application/start #Start er up!